PsychoPy2experiment version="2023.2.1"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s_FB_40loop_ExpTest%s' % (expInfo['participant ID'], expName, expInfo['date'], expInfo['你的实验编号'])
  Experiment info = {'participant ID': '', '性别': "['男','女']", '年龄': '', '你的实验编号': "['1','2','3','4']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2048, 1152]
  color = 0.0000, 0.0000, 0.0000
  colorSpace = dkl
  expName = VisualExp1
  keyboardBackend = ioHub
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Routines
  Routine blank_3
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  Routine Thanks
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    TextComponent thanks
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text [set every frame] = $txt_last_thanks
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  Routine routine_1
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  Routine instr1
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    TextComponent instr_start
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $E3_instro1
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    KeyboardComponent instr_start_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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    CodeComponent code_wr
      Code Type = Py
    ImageComponent image_eg_intro
      image = $example_task2
      pos = (0, -0.3)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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  Routine instr3
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    TextComponent text_norm_2
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 5
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      text:
        如果再次出现60张红点图，
        你认为你可以判断正确多少次？
        点击空格键后，
        请在稍后弹窗中输入预测数字并点击确认。
    KeyboardComponent key_instruct_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = all keys
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    CodeComponent code_3
      Code Type = Py
      End Routine:
        pridInfo = {
        '预测值':'',
        }
        dlg = gui.DlgFromDict(dictionary=pridInfo, sortKeys=False, title='输入你的预测值')
        entry_int = pridInfo['预测值']
        prid_filename = filename + '_forecast.txt'
        # Write extry_int to file
        with open(prid_filename, 'a') as f:
            f.write(str(entry_int))
            f.write('\n')
  Routine instr2
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    TextComponent text_norm
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        如果再次出现60张红点图，
        你认为你可以判断正确多少次？
        点击空格键后，
        请在稍后弹窗中输入预测数字并确认。
        随后进行下一个测试。
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = all keys
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        import write_test_excel
        dt_r2 =  write_test_excel.WriteExcel(pathNamPrefix='withoutP/No_prompt', excelFileName='./withoutPtask2.xlsx', colums1_name='withoutP2', colums2_name='correct_key2',loopNum=4, total_file_num=150)
        dt_r2.write()
      End Routine:
        pridInfo = {
        '预测值':'',
        }
        dlg = gui.DlgFromDict(dictionary=pridInfo, sortKeys=False, title='输入你的预测值')
        entry_int = pridInfo['预测值']
        prid_filename = filename + '_forecast.txt'
        # Write extry_int to file
        with open(prid_filename, 'a') as f:
            f.write(str(entry_int))
            f.write('\n')
  Routine instr2_input
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    CodeComponent code_2
      Code Type = Py
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    TextComponent text_instro2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_instruct_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = all keys
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  Routine F_Loss
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  Routine Feedback_Loss
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    TextComponent text_Feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $feedback_content
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    KeyboardComponent key_resp_Feedback
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Auto->JS
  Routine blank_for_code
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    CodeComponent code_init
      Code Type = Py
      Before Experiment:
        import write_test_excel
      Begin Experiment:
        exp_idx = expInfo['你的实验编号']
        E1_instro1='Normal blank'
        exp_id = int(exp_idx)
        pic_num = 15
        loop1_filename = 'withPtask1.xlsx'
        task1_time = 2
        dt_prompt1 =  write_test_excel.WriteExcel(pathNamPrefix='withP40/With_prompt_40', excelFileName='./withPtask1.xlsx', colums1_name='Pic1', colums2_name='correct_key1',loopNum=pic_num, total_file_num=150)
        dt_prompt1.write()
        dt_prompt3 =  write_test_excel.WriteExcel(pathNamPrefix='withP40/With_prompt_40', excelFileName='./withPtask3.xlsx', colums1_name='Pic3', colums2_name='correct_key3',loopNum=pic_num, total_file_num=150)
        dt_prompt3.write()
        dt_noprompt1 =  write_test_excel.WriteExcel(pathNamPrefix='withoutP40/No_prompt_40', excelFileName='./withoutPtask1.xlsx', colums1_name='Pic1', colums2_name='correct_key1',loopNum=pic_num, total_file_num=150)
        dt_noprompt1.write()
        dt_noprompt2 =  write_test_excel.WriteExcel(pathNamPrefix='withoutP40/No_prompt_40', excelFileName='./withoutPtask2.xlsx', colums1_name='Pic2', colums2_name='correct_key2',loopNum=pic_num, total_file_num=150)
        dt_noprompt2.write()
        dt_noprompt3 =  write_test_excel.WriteExcel(pathNamPrefix='withoutP40/No_prompt_40', excelFileName='./withoutPtask3.xlsx', colums1_name='Pic3', colums2_name='correct_key3',loopNum=pic_num, total_file_num=150)
        dt_noprompt3.write()
        dt_noprompt4 =  write_test_excel.WriteExcel(pathNamPrefix='withoutP40/No_prompt_40', excelFileName='./withoutPtask4.xlsx', colums1_name='Pic4', colums2_name='correct_key4',loopNum=pic_num, total_file_num=150)
        dt_noprompt4.write()
        # 需要的变量
        is_anser_at1 = 1
        is_feedback = 1
        E1_instro1_filename = './Error.txt'
        example_task1 = './instruction_text/example_noprompt.png'
        example_task2 = './instruction_text/example_noprompt.png'
        example_task3 = './instruction_text/example_noprompt.png'
        example_task4 = './instruction_text/example_noprompt.png'
        task1_corr = 0
        task2_corr = 0
        task3_corr = 0
        task4_corr = 0
        txt_last_thanks=""
        E3_instro1_filename = './instruction_text/Exp_intro.txt'
        T1_predict_filename = "./instruction_text/T1_predict.txt"
        T3_predict_filename = "./instruction_text/T3_predict.txt"
        if exp_id < 3:
            T1_predict_filename = './instruction_text/T1_predict_12.txt'
            loop1_filename = './withPtask1.xlsx'
            example_task1 = './instruction_text/example_prompt.png'
            loop3_filename = 'withoutPtask3.xlsx'
            example_task3 = './instruction_text/example_noprompt.png'
        elif exp_id < 5:
            T3_predict_filename = './instruction_text/T3_predict_34.txt'
            loop1_filename = 'withoutPtask1.xlsx'
            example_task1 = './instruction_text/example_noprompt.png'
            loop3_filename = './withPtask3.xlsx'
            example_task3 = './instruction_text/example_prompt.png'
        else:
            E3_instro1_filename = './Error.txt'

        loop2_filename = 'withoutPtask2.xlsx'
        loop4_filename = 'withoutPtask4.xlsx'

        with open(E3_instro1_filename, 'r',encoding='UTF-8') as file:
            E3_instro1 = file.read()

        T1_predict = "看到此文字说明程序错误"
        with open(T1_predict_filename, 'r', encoding='UTF-8') as file:
            T1_predict = file.read()

        T2_predict = "看到此文字说明程序错误"
        with open('./instruction_text/T2_predict.txt', 'r', encoding='UTF-8') as file:
            T2_predict = file.read()

        T3_predict = "看到此文字说明程序错误"
        with open(T3_predict_filename, 'r', encoding='UTF-8') as file:
            T3_predict = file.read()

        T4_predict = "看到此文字说明程序错误"
        with open('./instruction_text/T4_predict.txt', 'r', encoding='UTF-8') as file:
            T4_predict = file.read()

        Last_predict = "看到此文字说明程序错误"
        with open('./instruction_text/Last_predict.txt', 'r', encoding='UTF-8') as file:
            Last_predict = file.read()

        feedback_type = exp_id % 2
  Routine fb_string_gen
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    CodeComponent code_fb_string
      Code Type = Auto->JS
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      Begin Routine:
        if feedback_type == 1:
            fb_string = "刚刚的测试中测试你判断正确了" + str(b) + "个图片 \n (共30个图片)"
            pmt_loc = (0, 0.15)
  Routine predict_textinput
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    TextComponent text_fb
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text [set every frame] = $fb_string
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    TextComponent textPrompt
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
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      text:
        若再次出现如下图所示的红点图20张，
        你认为你可以判断正确多少次？
        使用数字键输入，然后按Enter进入下一界面。
    TextComponent textinput
      letterHeight = 0.05
      pos = (0.1, 0.03)
      startVal [time (s)] = 0.0
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      text [set every frame]:
        $respDisplay
    KeyboardComponent keyResp
      allowedKeys = '1','2','3','4','5','6','7','8','9','0','return','backspace'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent code_input
      Code Type = Both
      Begin Routine:
        respDisplay = ""
        maxDigits = 6

        #key logger defaults
        last_len = 0
        key_list = []
      Each Frame:
        #if a new key has been pressed since last time
        if(len(keyResp.keys) > last_len):

            #increment the key logger length
            last_len = len(keyResp.keys)

            #grab the last key added to the keys list
            key_list.append(keyResp.keys.pop())

            #check for backspace
            if("backspace" in key_list):
                key_list.remove("backspace")

                #if we have at least 1 character, remove it
                if(len(key_list) > 0):
                    key_list.pop()

            #if enter is pressed then...
            elif("return" in key_list):
                #remove the enter key
                key_list.pop()

                #and end the trial if we have at least 2 digits
                if(len(key_list) >= 2):
                    continueRoutine = False


            #now loop through and remove any extra characters that may exist
            while(len(key_list) > maxDigits):
                key_list.pop()

            #create a variable to display
            respDisplay = ''.join(key_list)
      End Routine:
        thisExp.addData('subjResponse', respDisplay)
    KeyboardComponent key_resp
      allowedKeys = 'enter'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    TextComponent text_pridt_prompt
      letterHeight = 0.05
      pos = (-0.1, 0.)
      startVal [time (s)] = 0.0
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      text:
        你的预测值：
        （两位数）
    ImageComponent image_example
      image = example_noprompt.png
      pos = (0, -0.28)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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  Routine predict_test2
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    TextComponent txtDisplayInputPredict_2
      letterHeight = 0.05
      pos = (0.1, -0.1)
      startVal [time (s)] = 0.0
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      text [set every frame]:
        $test2_predic_disp
    CodeComponent code_predict_test1_2
      Code Type = Auto->JS
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      Begin Routine:
        test2_predic_disp = ""
        maxDigits = 6

        #key logger defaults
        last_len = 0
        key_list = []
      Each Frame:
        #if a new key has been pressed since last time
        if(len(keyResp_predict2.keys) > last_len):

            #increment the key logger length
            last_len = len(keyResp_predict2.keys)

            #grab the last key added to the keys list
            key_list.append(keyResp_predict2.keys.pop())

            #check for backspace
            if("backspace" in key_list):
                key_list.remove("backspace")

                #if we have at least 1 character, remove it
                if(len(key_list) > 0):
                    key_list.pop()

            #if enter is pressed then...
            elif("return" in key_list):
                #remove the enter key
                key_list.pop()

                #and end the trial if we have at least 2 digits
                if(len(key_list) >= 2):
                    continueRoutine = False


            #now loop through and remove any extra characters that may exist
            while(len(key_list) > maxDigits):
                key_list.pop()

            #create a variable to display
            test2_predic_disp = ''.join(key_list)
      End Routine:
        thisExp.addData('subjResponse', test2_predic_disp)
    KeyboardComponent keyResp_predict2
      allowedKeys = '1','2','3','4','5','6','7','8','9','0','return','backspace'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent txtPrompt_predict1_2
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        请用数字键输入你认为测试二答对的数目（共20题）
        然后按Enter结束实验。
    TextComponent text_pridt_prompt_3
      letterHeight = 0.05
      pos = (-0.1, -0.125)
      startVal [time (s)] = 0.0
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      text:
        你的预测值：
        （两位数）
  Routine task1
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    TextComponent fixation
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = +
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    ImageComponent task1_withP
      image [set every repeat] = $Pic1
      size = (0.8, 0.8)
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = $task1_time
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    KeyboardComponent key_resp1
      allowedKeys [set every repeat] = 's','k'
      correctAns = $correct_key1
      forceEndRoutine = True
      startVal [time (s)] = 0.4
      storeCorrect = True
      syncScreenRefresh = False
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    TextComponent text_left
      letterHeight = 0.05
      pos = (-0.3, 0)
      startVal [time (s)] = $task1_time
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      text:
        左
        (S键)
    TextComponent text_right
      letterHeight = 0.05
      pos = (0.3, 0)
      startVal [time (s)] = $task1_time
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      text:
        右
        (K键)
    TextComponent text_answer_prompt
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = task1_time
      text = 请作答
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  Routine judge_task1
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    CodeComponent code_judje_task1
      Code Type = Auto->JS
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      Begin Experiment:
        feedback = "" #建立名为feedback的变量，等号的左右两边均有空格(接下)
                      #（接上）等号右边为英文引号(内无空格)，会有文字赋值到该变量
        a = []  #建立名为a的变量，变量类型为列表，等号右边为中括号（内无空格）
      Begin Routine:
        a.append(key_resp1.corr)     #变量a是个列表，.append()函数把括号内key_resp.corr的值添加到a中
        b = sum(a[0:])  #建立变量b,使用sum()函数计算列表a中从0开始到结尾（包含结尾最后一个值）的总和
        task1_corr = b
  Routine predict_task1
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    ImageComponent image_eg_predict_task1
      image = $example_task1
      pos = (0, -0.3)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    TextComponent txt_predict_task1
      letterHeight = 0.05
      pos = (-0.1, -0.06)
      startVal [time (s)] = 0.0
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      text:
        你的预测值：
        （两位数）
    KeyboardComponent key_predict_task1
      allowedKeys = '1','2','3','4','5','6','7','8','9','0','return','backspace'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent txt_question_predict_task1
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        $T1_predict
    TextComponent txt_disp_input_predict_task1
      letterHeight = 0.05
      pos = (0.1, -0.03)
      startVal [time (s)] = 0.0
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      text [set every frame]:
        $respDisplay_task1
    CodeComponent code_input_predict_task1
      Code Type = Both
      Begin Routine:
        respDisplay_task1 = ""
        maxDigits = 6

        #key logger defaults
        last_len = 0
        key_list = []
        fb_string = "您已完成测试1"
        a = []
      Each Frame:
        #if a new key has been pressed since last time
        if(len(key_predict_task1.keys) > last_len):

            #increment the key logger length
            last_len = len(key_predict_task1.keys)

            #grab the last key added to the keys list
            key_list.append(key_predict_task1.keys.pop())

            #check for backspace
            if("backspace" in key_list):
                key_list.remove("backspace")

                #if we have at least 1 character, remove it
                if(len(key_list) > 0):
                    key_list.pop()

            #if enter is pressed then...
            elif("return" in key_list):
                #remove the enter key
                key_list.pop()

                #and end the trial if we have at least 2 digits
                if(len(key_list) >= 2):
                    continueRoutine = False


            #now loop through and remove any extra characters that may exist
            while(len(key_list) > maxDigits):
                key_list.pop()

            #create a variable to display
            respDisplay_task1 = ''.join(key_list)
      End Routine:
        thisExp.addData('subjResponse', respDisplay_task1)
    TextComponent text_taskID1
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = 测试1（共4个）
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  Routine _fb_task1
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    TextComponent txtDisplayInputPredict
      letterHeight = 0.05
      pos = (0.1, -0.1)
      startVal [time (s)] = 0.0
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      text [set every frame]:
        $test1_predic_disp
    CodeComponent code_predict_test1
      Code Type = Auto->JS
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      Begin Routine:
        test1_predic_disp = ""
        maxDigits = 6

        #key logger defaults
        last_len = 0
        key_list = []
      Each Frame:
        #if a new key has been pressed since last time
        if(len(keyResp_predict1.keys) > last_len):

            #increment the key logger length
            last_len = len(keyResp_predict1.keys)

            #grab the last key added to the keys list
            key_list.append(keyResp_predict1.keys.pop())

            #check for backspace
            if("backspace" in key_list):
                key_list.remove("backspace")

                #if we have at least 1 character, remove it
                if(len(key_list) > 0):
                    key_list.pop()

            #if enter is pressed then...
            elif("return" in key_list):
                #remove the enter key
                key_list.pop()

                #and end the trial if we have at least 2 digits
                if(len(key_list) >= 2):
                    continueRoutine = False


            #now loop through and remove any extra characters that may exist
            while(len(key_list) > maxDigits):
                key_list.pop()

            #create a variable to display
            test1_predic_disp = ''.join(key_list)
      End Routine:
        thisExp.addData('subjResponse', test1_predic_disp)
    KeyboardComponent keyResp_predict1
      allowedKeys = '1','2','3','4','5','6','7','8','9','0','return','backspace'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent txtPrompt_predict1
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        请用数字键输入你认为在测试1中答对的数目（共20题）
        然后按Enter进入下一界面。
    TextComponent text_pridt_prompt_2
      letterHeight = 0.05
      pos = (-0.1, -0.125)
      startVal [time (s)] = 0.0
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      text:
        你的预测值：
        （两位数）
  Routine fb_current
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    TextComponent txt_fb
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text [set every frame] = $fb_string
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    KeyboardComponent key_next
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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    TextComponent txt_fb2
      letterHeight = 0.05
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
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      text [set every frame]:
        请按空格进入下一阶段
  Routine predict_task2
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    ImageComponent image_eg_predict_task2
      image = $example_task2
      pos = (0, -0.3)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    TextComponent txt_predict_task2
      letterHeight = 0.05
      pos = (-0.1, -0.06)
      startVal [time (s)] = 0.0
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      text:
        你的预测值：
        （两位数）
    KeyboardComponent key_predict_task2
      allowedKeys = '1','2','3','4','5','6','7','8','9','0','return','backspace'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent txt_question_predict_task2
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = $T2_predict
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    TextComponent txt_disp_input_predict_task2
      letterHeight = 0.05
      pos = (0.1, -0.03)
      startVal [time (s)] = 0.0
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      text [set every frame]:
        $respDisplay_task2
    CodeComponent code_input_predict_task2
      Code Type = Both
      Begin Routine:
        respDisplay_task2 = ""
        maxDigits = 6

        #key logger defaults
        last_len = 0
        key_list = []
        fb_string = "您已完成测试2"
        a = []
      Each Frame:
        #if a new key has been pressed since last time
        if(len(key_predict_task2.keys) > last_len):

            #increment the key logger length
            last_len = len(key_predict_task2.keys)

            #grab the last key added to the keys list
            key_list.append(key_predict_task2.keys.pop())

            #check for backspace
            if("backspace" in key_list):
                key_list.remove("backspace")

                #if we have at least 1 character, remove it
                if(len(key_list) > 0):
                    key_list.pop()

            #if enter is pressed then...
            elif("return" in key_list):
                #remove the enter key
                key_list.pop()

                #and end the trial if we have at least 2 digits
                if(len(key_list) >= 2):
                    continueRoutine = False


            #now loop through and remove any extra characters that may exist
            while(len(key_list) > maxDigits):
                key_list.pop()

            #create a variable to display
            respDisplay_task2 = ''.join(key_list)
      End Routine:
        thisExp.addData('subjResponse', respDisplay_task2)
    TextComponent text_taskID2
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = 测试2（共4个）
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  Routine task2
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    TextComponent fixation2
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = +
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    ImageComponent task2_noP
      image [set every repeat] = $Pic2
      size = (0.8, 0.8)
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = $task1_time
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    KeyboardComponent key_resp2
      allowedKeys [set every repeat] = 's','k'
      correctAns = $correct_key2
      forceEndRoutine = True
      startVal [time (s)] = 0.4
      storeCorrect = True
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    TextComponent text_left_2
      letterHeight = 0.05
      pos = (-0.3, 0)
      startVal [time (s)] = $task1_time
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      text:
        左
        (S键)
    TextComponent text_right_2
      letterHeight = 0.05
      pos = (0.3, 0)
      startVal [time (s)] = $task1_time
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      text:
        右
        (K键)
    TextComponent text_answer_prompt_2
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = task1_time
      text = 请作答
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  Routine judge_task2
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    CodeComponent code_judje_task2
      Code Type = Auto->JS
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      Begin Experiment:
        feedback = "" #建立名为feedback的变量，等号的左右两边均有空格(接下)
                      #（接上）等号右边为英文引号(内无空格)，会有文字赋值到该变量
        a = []  #建立名为a的变量，变量类型为列表，等号右边为中括号（内无空格）
      Begin Routine:
        a.append(key_resp2.corr)     #变量a是个列表，.append()函数把括号内key_resp.corr的值添加到a中
        b = sum(a[0:])  #建立变量b,使用sum()函数计算列表a中从0开始到结尾（包含结尾最后一个值）的总和
        task2_corr = b
  Routine task3
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    TextComponent fixation3
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = +
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    ImageComponent task3_pic
      image [set every repeat] = $Pic3
      size = (0.8, 0.8)
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = $task1_time
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    KeyboardComponent key_resp3
      allowedKeys [set every repeat] = 's','k'
      correctAns = $correct_key3
      forceEndRoutine = True
      startVal [time (s)] = 0.4
      storeCorrect = True
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    TextComponent text_left_3
      letterHeight = 0.05
      pos = (-0.3, 0)
      startVal [time (s)] = $task1_time
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      text:
        左
        (S键)
    TextComponent text_right_3
      letterHeight = 0.05
      pos = (0.3, 0)
      startVal [time (s)] = $task1_time
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      text:
        右
        (K键)
    TextComponent text_answer_prompt_3
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = task1_time
      text = 请作答
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  Routine judge_task3
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    CodeComponent code_judje_task3
      Code Type = Auto->JS
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      Begin Experiment:
        feedback = "" #建立名为feedback的变量，等号的左右两边均有空格(接下)
                      #（接上）等号右边为英文引号(内无空格)，会有文字赋值到该变量
        a = []  #建立名为a的变量，变量类型为列表，等号右边为中括号（内无空格）
      Begin Routine:
        a.append(key_resp3.corr)     #变量a是个列表，.append()函数把括号内key_resp.corr的值添加到a中
        b = sum(a[0:])  #建立变量b,使用sum()函数计算列表a中从0开始到结尾（包含结尾最后一个值）的总和
        task3_corr = b
  Routine predict_task3
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    ImageComponent image_eg_predict_task3
      image = $example_task3
      pos = (0, -0.3)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    TextComponent txt_predict_task3
      letterHeight = 0.05
      pos = (-0.1, -0.06)
      startVal [time (s)] = 0.0
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      text:
        你的预测值：
        （两位数）
    KeyboardComponent key_predict_task3
      allowedKeys = '1','2','3','4','5','6','7','8','9','0','return','backspace'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent txt_question_predict_task3
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = $T3_predict
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    TextComponent txt_disp_input_predict_task3
      letterHeight = 0.05
      pos = (0.1, -0.03)
      startVal [time (s)] = 0.0
      text [set every frame] = $respDisplay_task3
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    CodeComponent code_input_predict_task3
      Code Type = Both
      Begin Routine:
        respDisplay_task3 = ""
        maxDigits = 6

        #key logger defaults
        last_len = 0
        key_list = []
        fb_string = "您已完成测试3"
        a = []
      Each Frame:
        #if a new key has been pressed since last time
        if(len(key_predict_task3.keys) > last_len):

            #increment the key logger length
            last_len = len(key_predict_task3.keys)

            #grab the last key added to the keys list
            key_list.append(key_predict_task3.keys.pop())

            #check for backspace
            if("backspace" in key_list):
                key_list.remove("backspace")

                #if we have at least 1 character, remove it
                if(len(key_list) > 0):
                    key_list.pop()

            #if enter is pressed then...
            elif("return" in key_list):
                #remove the enter key
                key_list.pop()

                #and end the trial if we have at least 2 digits
                if(len(key_list) >= 2):
                    continueRoutine = False


            #now loop through and remove any extra characters that may exist
            while(len(key_list) > maxDigits):
                key_list.pop()

            #create a variable to display
            respDisplay_task3 = ''.join(key_list)
      End Routine:
        thisExp.addData('subjResponse', respDisplay_task3)
    TextComponent text_taskID3
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = 测试3（共4个）
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  Routine predict_task4
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    ImageComponent image_eg_predict_task4
      image = $example_task4
      pos = (0, -0.3)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    TextComponent txt_predict_task4
      letterHeight = 0.05
      pos = (-0.1, -0.06)
      startVal [time (s)] = 0.0
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      text:
        你的预测值：
        （两位数）
    KeyboardComponent key_predict_task4
      allowedKeys = '1','2','3','4','5','6','7','8','9','0','return','backspace'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent txt_question_predict_task4
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = $T4_predict
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    TextComponent txt_disp_input_predict_task4
      letterHeight = 0.05
      pos = (0.1, -0.03)
      startVal [time (s)] = 0.0
      text [set every frame] = $respDisplay_task4
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    CodeComponent code_input_predict_task4
      Code Type = Both
      Begin Routine:
        respDisplay_task4 = ""
        maxDigits = 6

        #key logger defaults
        last_len = 0
        key_list = []
        fb_string = "您已完成测试4"
        a = []
      Each Frame:
        #if a new key has been pressed since last time
        if(len(key_predict_task4.keys) > last_len):

            #increment the key logger length
            last_len = len(key_predict_task4.keys)

            #grab the last key added to the keys list
            key_list.append(key_predict_task4.keys.pop())

            #check for backspace
            if("backspace" in key_list):
                key_list.remove("backspace")

                #if we have at least 1 character, remove it
                if(len(key_list) > 0):
                    key_list.pop()

            #if enter is pressed then...
            elif("return" in key_list):
                #remove the enter key
                key_list.pop()

                #and end the trial if we have at least 2 digits
                if(len(key_list) >= 2):
                    continueRoutine = False


            #now loop through and remove any extra characters that may exist
            while(len(key_list) > maxDigits):
                key_list.pop()

            #create a variable to display
            respDisplay_task4 = ''.join(key_list)
      End Routine:
        thisExp.addData('subjResponse', respDisplay_task4)
    TextComponent text_taskID4
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = 测试4（共4个）
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  Routine task4
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    TextComponent fixation4
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = +
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    ImageComponent task34_pic
      image [set every repeat] = $Pic4
      size = (0.8, 0.8)
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = $task1_time
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    KeyboardComponent key_resp4
      allowedKeys [set every repeat] = 's','k'
      correctAns = $correct_key4
      forceEndRoutine = True
      startVal [time (s)] = 0.4
      storeCorrect = True
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    TextComponent text_left_4
      letterHeight = 0.05
      pos = (-0.3, 0)
      startVal [time (s)] = $task1_time
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      text:
        左
        (S键)
    TextComponent text_right_4
      letterHeight = 0.05
      pos = (0.3, 0)
      startVal [time (s)] = $task1_time
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      text:
        右
        (K键)
    TextComponent text_answer_prompt_4
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = task1_time
      text = 请作答
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  Routine judge_task4
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  Routine last_fb_and_predict
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    ImageComponent image_eg_predict_task5
      image = $example_task4
      pos = (0, -0.3)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    TextComponent txt_predict_task5
      letterHeight = 0.05
      pos = (-0.1, -0.06)
      startVal [time (s)] = 0.0
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      text:
        你的预测值：
        （两位数）
    KeyboardComponent key_predict_task5
      allowedKeys = '1','2','3','4','5','6','7','8','9','0','return','backspace'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent txt_question_predict_task5
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = $Last_predict
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    TextComponent txt_disp_input_predict_task5
      letterHeight = 0.05
      pos = (0.1, -0.03)
      startVal [time (s)] = 0.0
      text [set every frame] = $respDisplay_task5
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    CodeComponent code_input_predict_task5
      Code Type = Both
      Begin Routine:
        respDisplay_task5 = ""
        maxDigits = 6

        #key logger defaults
        last_len = 0
        key_list = []
        fb_string = "您已完成测试4"
        a = []
      Each Frame:
        #if a new key has been pressed since last time
        if(len(key_predict_task5.keys) > last_len):

            #increment the key logger length
            last_len = len(key_predict_task5.keys)

            #grab the last key added to the keys list
            key_list.append(key_predict_task5.keys.pop())

            #check for backspace
            if("backspace" in key_list):
                key_list.remove("backspace")

                #if we have at least 1 character, remove it
                if(len(key_list) > 0):
                    key_list.pop()

            #if enter is pressed then...
            elif("return" in key_list):
                #remove the enter key
                key_list.pop()

                #and end the trial if we have at least 2 digits
                if(len(key_list) >= 2):
                    continueRoutine = False


            #now loop through and remove any extra characters that may exist
            while(len(key_list) > maxDigits):
                key_list.pop()

            #create a variable to display
            respDisplay_task5 = ''.join(key_list)
      End Routine:
        thisExp.addData('subjResponse', respDisplay_task5)
  Routine thanks_gen
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    CodeComponent code_last_thanks_2
      Code Type = Auto->JS
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      Begin Routine:
        txt_last_thanks = "恭喜你完成了本次实验所有任务！\n 感谢你的参与！\n在四个测试中，\n你一共答对题数目为：" + str(task1_corr + task2_corr + task3_corr + task4_corr)
  Routine thanks_end
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $txt_last_thanks
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  Routine practice_pic
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    TextComponent fixation_2
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = +
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    ImageComponent taskpractice
      image [set every repeat] = $Pic0
      size = (0.8, 0.8)
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = $task1_time
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    KeyboardComponent key_resp_practice
      allowedKeys [set every repeat] = 's','k'
      correctAns = $correct_key0
      forceEndRoutine = True
      startVal [time (s)] = 0.4
      storeCorrect = True
      syncScreenRefresh = False
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    TextComponent text_left_5
      letterHeight = 0.05
      pos = (-0.3, 0)
      startVal [time (s)] = $task1_time
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      text:
        左
        (S键)
    TextComponent text_right_5
      letterHeight = 0.05
      pos = (0.3, 0)
      startVal [time (s)] = $task1_time
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      text:
        右
        (K键)
    TextComponent text_answer_prompt_5
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = task1_time
      text = 请作答
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Flow
  Routine blank_for_code
  Routine instr1
  LoopInitiator trials_practice loopType="TrialHandler"
    conditionsFile = practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Pic0': 'withoutP40/No_prompt_40_left_88.png', 'correct_key0': 's'},
      {'Pic0': 'withoutP40/No_prompt_40_left_128.png', 'correct_key0': 's'},
      {'Pic0': 'withoutP40/No_prompt_40_left_34.png', 'correct_key0': 's'},
      {'Pic0': 'withoutP40/No_prompt_40_right_66.png', 'correct_key0': 'k'},
      {'Pic0': 'withoutP40/No_prompt_40_right_114.png', 'correct_key0': 'k'},
      {'Pic0': 'withoutP40/No_prompt_40_right_31.png', 'correct_key0': 'k'}]
    Routine practice_pic
  LoopTerminator trials_practice
  Routine predict_task1
  LoopInitiator trials1 loopType="TrialHandler"
    conditionsFile = $loop1_filename
    loopType = random
    nReps = 1
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    conditions:
      [{'withoutP1': 'withP/No_prompt_left_78.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_94.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_98.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_50.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_52.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_137.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_127.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_49.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_118.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_123.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_88.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_122.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_9.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_121.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_23.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_96.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_69.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_38.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_107.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_15.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_12.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_111.png', 'correct_key1': 's'}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
    Routine task1
    Routine judge_task1
  LoopTerminator trials1
  Routine fb_string_gen
  Routine fb_current
  Routine predict_task2
  LoopInitiator trials2 loopType="TrialHandler"
    conditionsFile = $loop2_filename
    loopType = random
    nReps = 1
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    conditions:
      [{'withP2': 'withoutP/No_prompt_left_137.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_12.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_61.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_33.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_149.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_25.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_118.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_142.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_34.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_27.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_122.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_32.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_54.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_52.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_136.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_26.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_95.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_96.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_39.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_48.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_45.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_126.png', 'correct_key2': 's'}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
    Routine task2
    Routine judge_task2
  LoopTerminator trials2
  Routine fb_string_gen
  Routine fb_current
  Routine predict_task3
  LoopInitiator trials3 loopType="TrialHandler"
    conditionsFile = $loop3_filename
    loopType = random
    nReps = 1
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    conditions:
      [{'Pic3': 'withoutP/No_prompt_left_62.png', 'correct_key3': 's'},
      {'Pic3': 'withoutP/No_prompt_left_118.png', 'correct_key3': 's'},
      {'Pic3': 'withoutP/No_prompt_left_136.png', 'correct_key3': 's'},
      {'Pic3': 'withoutP/No_prompt_left_93.png', 'correct_key3': 's'},
      {'Pic3': 'withoutP/No_prompt_left_19.png', 'correct_key3': 's'},
      {'Pic3': 'withoutP/No_prompt_right_134.png', 'correct_key3': 'k'},
      {'Pic3': 'withoutP/No_prompt_right_66.png', 'correct_key3': 'k'},
      {'Pic3': 'withoutP/No_prompt_right_16.png', 'correct_key3': 'k'},
      {'Pic3': 'withoutP/No_prompt_right_130.png', 'correct_key3': 'k'},
      {'Pic3': 'withoutP/No_prompt_right_6.png', 'correct_key3': 'k'}]
    Routine task3
    Routine judge_task3
  LoopTerminator trials3
  Routine fb_string_gen
  Routine fb_current
  Routine predict_task4
  LoopInitiator trials4 loopType="TrialHandler"
    conditionsFile = $loop4_filename
    loopType = random
    nReps = 1
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    conditions:
      [{'Pic4': 'withoutP/No_prompt_left_83.png', 'correct_key4': 's'},
      {'Pic4': 'withoutP/No_prompt_left_57.png', 'correct_key4': 's'},
      {'Pic4': 'withoutP/No_prompt_left_71.png', 'correct_key4': 's'},
      {'Pic4': 'withoutP/No_prompt_left_73.png', 'correct_key4': 's'},
      {'Pic4': 'withoutP/No_prompt_left_82.png', 'correct_key4': 's'},
      {'Pic4': 'withoutP/No_prompt_right_53.png', 'correct_key4': 'k'},
      {'Pic4': 'withoutP/No_prompt_right_122.png', 'correct_key4': 'k'},
      {'Pic4': 'withoutP/No_prompt_right_129.png', 'correct_key4': 'k'},
      {'Pic4': 'withoutP/No_prompt_right_104.png', 'correct_key4': 'k'},
      {'Pic4': 'withoutP/No_prompt_right_132.png', 'correct_key4': 'k'}]
    Routine task4
    Routine judge_task4
  LoopTerminator trials4
  Routine fb_string_gen
  Routine fb_current
  Routine last_fb_and_predict
  Routine thanks_gen
  Routine Thanks
