PsychoPy2experiment version="2023.2.1"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s_FB_40loop_ExpTest' % (expInfo['participant ID'], expName, expInfo['date'])
  Experiment info = {'participant ID': '', '性别': "['男','女']", '年龄': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1463, 914]
  color = 0.0000, 0.0000, 0.0000
  colorSpace = dkl
  expName = VisualExp1
  keyboardBackend = ioHub
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Routines
  Routine blank_3
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  Routine Thanks
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    TextComponent thanks
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $txt_thanks
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  Routine routine_1
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  Routine instr1
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    TextComponent instr_start
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $E1_instro1
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    KeyboardComponent instr_start_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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    ImageComponent image_eg
      image = example_noprompt.png
      pos = (0, -0.2)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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  Routine instr3
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    TextComponent text_norm_2
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 5
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      text:
        如果再次出现60张红点图，
        你认为你可以判断正确多少次？
        点击空格键后，
        请在稍后弹窗中输入预测数字并点击确认。
    KeyboardComponent key_instruct_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = all keys
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    CodeComponent code_3
      Code Type = Py
      End Routine:
        pridInfo = {
        '预测值':'',
        }
        dlg = gui.DlgFromDict(dictionary=pridInfo, sortKeys=False, title='输入你的预测值')
        entry_int = pridInfo['预测值']
        prid_filename = filename + '_forecast.txt'
        # Write extry_int to file
        with open(prid_filename, 'a') as f:
            f.write(str(entry_int))
            f.write('\n')
  Routine instr2
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    TextComponent text_norm
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        如果再次出现60张红点图，
        你认为你可以判断正确多少次？
        点击空格键后，
        请在稍后弹窗中输入预测数字并确认。
        随后进行下一个测试。
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = all keys
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        import write_test_excel
        dt_r2 =  write_test_excel.WriteExcel(pathNamPrefix='withoutP/No_prompt', excelFileName='./withoutPtask2.xlsx', colums1_name='withoutP2', colums2_name='correct_key2',loopNum=4, total_file_num=150)
        dt_r2.write()
      End Routine:
        pridInfo = {
        '预测值':'',
        }
        dlg = gui.DlgFromDict(dictionary=pridInfo, sortKeys=False, title='输入你的预测值')
        entry_int = pridInfo['预测值']
        prid_filename = filename + '_forecast.txt'
        # Write extry_int to file
        with open(prid_filename, 'a') as f:
            f.write(str(entry_int))
            f.write('\n')
  Routine instr2_input
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    CodeComponent code_2
      Code Type = Py
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    TextComponent text_instro2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_instruct_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = all keys
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  Routine task1_with_P
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    TextComponent fixation
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = +
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    ImageComponent task1_withP
      image [set every repeat] = $Pic1
      size = (0.8, 0.8)
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = $task1_time
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    KeyboardComponent key_resp_task1
      allowedKeys [set every repeat] = 's','k'
      correctAns = $correct_key1
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
      syncScreenRefresh = False
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    TextComponent text_left_2
      letterHeight = 0.05
      pos = (-0.3, 0)
      startVal [time (s)] = $task1_time
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      text:
        左
        (S键)
    TextComponent text_right_2
      letterHeight = 0.05
      pos = (0.3, 0)
      startVal [time (s)] = $task1_time
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      text:
        右
        (K键)
    TextComponent text_7
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = $task1_time
      text = 请作答
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  Routine task2_without_P
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    TextComponent fixation2
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.3
      text = +
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    ImageComponent task2_noP
      image [set every repeat] = $Pic2
      size = (0.8, 0.8)
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = $task2_time
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    KeyboardComponent key_resp_task2
      allowedKeys [set every repeat] = 's','k'
      correctAns = $correct_key1
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
      syncScreenRefresh = False
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    TextComponent text_left_5
      letterHeight = 0.05
      pos = (-0.3, 0)
      startVal [time (s)] = $task2_time
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      text:
        左
        (S键)
    TextComponent text_right_5
      letterHeight = 0.05
      pos = (0.3, 0)
      startVal [time (s)] = $task2_time
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      text:
        右
        (K键)
    TextComponent text_8
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = $task2_time
      text = 请作答
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  Routine F_Loss
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  Routine Feedback_Loss
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    TextComponent text_Feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $feedback_content
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    KeyboardComponent key_resp_Feedback
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Auto->JS
  Routine blank_for_code
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    CodeComponent code_init
      Code Type = Py
      Before Experiment:
        import write_test_excel
      Begin Experiment:
        #exp_idx = expInfo['实验编号']
        E1_instro1='Normal blank'
        #exp_id = int(exp_idx)
        dt_practice =  write_test_excel.WriteExcel(pathNamPrefix='withoutP40/No_prompt_40', excelFileName='practice.xlsx', colums1_name='Pic0', colums2_name='correct_key0',loopNum=3, total_file_num=150)
        dt_practice.write()
        loop1_filename = 'task1_40.xlsx'
        loop2_filename = 'task2_40.xlsx'

        dt_loop1 =  write_test_excel.WriteExcel(pathNamPrefix='withoutP40/No_prompt_40', excelFileName=loop1_filename, colums1_name='Pic1', colums2_name='correct_key1',loopNum=15, total_file_num=150)
        dt_loop1.write()

        dt_loop2 =  write_test_excel.WriteExcel(pathNamPrefix='withoutP40/No_prompt_40', excelFileName=loop2_filename, colums1_name='Pic2', colums2_name='correct_key2',loopNum=15, total_file_num=150)

        dt_loop2.write()
        task1_time = 2
        task2_time = 2
        task1_score = 0
        task2_score = 0
        E1_instro1_filename = 'withoutP_instro1.txt'
        with open(E1_instro1_filename, 'r',encoding='UTF-8') as file:
            E1_instro1 = file.read()
            print(data)
  Routine fb_string_gen
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        pmt_loc = (0, 0.15)
        if feedback_type == 1:
            fb_string = "测试1你判断正确了" + str(b) + "个图片(共20个图片)"
            pmt_loc = (0, 0.15)
        else:
            fb_string = "您已完成测试1，接下来："
  Routine predict_textinput
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    TextComponent text_fb
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text [set every frame] = $fb_string
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    TextComponent textPrompt
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
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      text:
        若再次出现如下图所示的红点图20张，
        你认为你可以判断正确多少次？
        使用数字键输入，然后按Enter进入下一界面。
    TextComponent textinput
      letterHeight = 0.05
      pos = (0.1, 0.03)
      startVal [time (s)] = 0.0
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      text [set every frame]:
        $respDisplay
    KeyboardComponent keyResp
      allowedKeys = '1','2','3','4','5','6','7','8','9','0','return','backspace'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent code_input
      Code Type = Both
      Begin Routine:
        respDisplay = ""
        maxDigits = 6

        #key logger defaults
        last_len = 0
        key_list = []
      Each Frame:
        #if a new key has been pressed since last time
        if(len(keyResp.keys) > last_len):

            #increment the key logger length
            last_len = len(keyResp.keys)

            #grab the last key added to the keys list
            key_list.append(keyResp.keys.pop())

            #check for backspace
            if("backspace" in key_list):
                key_list.remove("backspace")

                #if we have at least 1 character, remove it
                if(len(key_list) > 0):
                    key_list.pop()

            #if enter is pressed then...
            elif("return" in key_list):
                #remove the enter key
                key_list.pop()

                #and end the trial if we have at least 2 digits
                if(len(key_list) >= 2):
                    continueRoutine = False


            #now loop through and remove any extra characters that may exist
            while(len(key_list) > maxDigits):
                key_list.pop()

            #create a variable to display
            respDisplay = ''.join(key_list)
      End Routine:
        thisExp.addData('subjResponse', respDisplay)
    KeyboardComponent key_resp
      allowedKeys = 'enter'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    TextComponent text_pridt_prompt
      letterHeight = 0.05
      pos = (-0.1, 0.)
      startVal [time (s)] = 0.0
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      text:
        你的预测值：
        （两位数）
    ImageComponent image_example
      image = example_noprompt.png
      pos = (0, -0.28)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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  Routine predict_test1
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    TextComponent txtDisplayInputPredict
      letterHeight = 0.05
      pos = (0.1, -0.1)
      startVal [time (s)] = 0.0
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      text [set every frame]:
        $test1_predic_disp
    CodeComponent code_predict_test1
      Code Type = Auto->JS
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      Begin Routine:
        test1_predic_disp = ""
        maxDigits = 6

        #key logger defaults
        last_len = 0
        key_list = []
      Each Frame:
        #if a new key has been pressed since last time
        if(len(keyResp_predict1.keys) > last_len):

            #increment the key logger length
            last_len = len(keyResp_predict1.keys)

            #grab the last key added to the keys list
            key_list.append(keyResp_predict1.keys.pop())

            #check for backspace
            if("backspace" in key_list):
                key_list.remove("backspace")

                #if we have at least 1 character, remove it
                if(len(key_list) > 0):
                    key_list.pop()

            #if enter is pressed then...
            elif("return" in key_list):
                #remove the enter key
                key_list.pop()

                #and end the trial if we have at least 2 digits
                if(len(key_list) >= 2):
                    continueRoutine = False


            #now loop through and remove any extra characters that may exist
            while(len(key_list) > maxDigits):
                key_list.pop()

            #create a variable to display
            test1_predic_disp = ''.join(key_list)
      End Routine:
        thisExp.addData('subjResponse', test1_predic_disp)
    KeyboardComponent keyResp_predict1
      allowedKeys = '1','2','3','4','5','6','7','8','9','0','return','backspace'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent txtPrompt_predict1
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        请用数字键输入你认为在测试1中答对的数目（共20题）
        然后按Enter进入下一界面。
    TextComponent text_pridt_prompt_2
      letterHeight = 0.05
      pos = (-0.1, -0.125)
      startVal [time (s)] = 0.0
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      text:
        你的预测值：
        （两位数）
  Routine predict_test2
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    TextComponent txtDisplayInputPredict_2
      letterHeight = 0.05
      pos = (0.1, -0.1)
      startVal [time (s)] = 0.0
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      text [set every frame]:
        $test2_predic_disp
    CodeComponent code_predict_test1_2
      Code Type = Auto->JS
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      Begin Routine:
        test2_predic_disp = ""
        maxDigits = 6

        #key logger defaults
        last_len = 0
        key_list = []
      Each Frame:
        #if a new key has been pressed since last time
        if(len(keyResp_predict2.keys) > last_len):

            #increment the key logger length
            last_len = len(keyResp_predict2.keys)

            #grab the last key added to the keys list
            key_list.append(keyResp_predict2.keys.pop())

            #check for backspace
            if("backspace" in key_list):
                key_list.remove("backspace")

                #if we have at least 1 character, remove it
                if(len(key_list) > 0):
                    key_list.pop()

            #if enter is pressed then...
            elif("return" in key_list):
                #remove the enter key
                key_list.pop()

                #and end the trial if we have at least 2 digits
                if(len(key_list) >= 2):
                    continueRoutine = False


            #now loop through and remove any extra characters that may exist
            while(len(key_list) > maxDigits):
                key_list.pop()

            #create a variable to display
            test2_predic_disp = ''.join(key_list)
      End Routine:
        thisExp.addData('subjResponse', test2_predic_disp)
    KeyboardComponent keyResp_predict2
      allowedKeys = '1','2','3','4','5','6','7','8','9','0','return','backspace'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent txtPrompt_predict1_2
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        请用数字键输入你认为测试二答对的数目（共20题）
        然后按Enter结束实验。
    TextComponent text_pridt_prompt_3
      letterHeight = 0.05
      pos = (-0.1, -0.125)
      startVal [time (s)] = 0.0
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      text:
        你的预测值：
        （两位数）
  Routine prompt_key
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    TextComponent text_left
      letterHeight = 0.05
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
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      text:
        左
        (S键)
    TextComponent text_right
      letterHeight = 0.05
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
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      text:
        右
        (K键)
    TextComponent text_3
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 请作答
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  Routine practice_pic
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    TextComponent fixation_practice
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = +
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    ImageComponent pic_practice
      image [set every repeat] = $Pic0
      size = (0.8, 0.8)
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = $task1_time
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    KeyboardComponent key_resp_practice
      allowedKeys [set every repeat] = 's','k'
      correctAns = $correct_key0
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
      syncScreenRefresh = False
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    TextComponent text_left_4
      letterHeight = 0.05
      pos = (-0.3, 0)
      startVal [time (s)] = $task1_time
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      text:
        左
        (S键)
    TextComponent text_right_4
      letterHeight = 0.05
      pos = (0.3, 0)
      startVal [time (s)] = $task1_time
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      text:
        右
        (K键)
    TextComponent text_6
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = $task1_time
      text = 请作答
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  Routine practice_key
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    TextComponent text_5
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 请作答
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  Routine prompt_key_task2
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    TextComponent text_left_3
      letterHeight = 0.05
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
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      text:
        左
        (S键)
    TextComponent text_right_3
      letterHeight = 0.05
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
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      text:
        右
        (K键)
    TextComponent text_4
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 请作答
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  Routine task1_to_2
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        恭喜你完成测试1，
        你可以短暂休息几秒
        或直接按空格键开始测试2
        测试2与测试1内容一致
        做相同按键的判断即可
    KeyboardComponent space_next
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        a = []
  Routine judge_task1
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    CodeComponent code_judge_task1
      Code Type = Auto->JS
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      Begin Experiment:
        feedback = "" #建立名为feedback的变量，等号的左右两边均有空格(接下)
                      #（接上）等号右边为英文引号(内无空格)，会有文字赋值到该变量
        a = []  #建立名为a的变量，变量类型为列表，等号右边为中括号（内无空格）
      Begin Routine:
        a.append(key_resp_task1.corr)     #变量a是个列表，.append()函数把括号内key_resp.corr的值添加到a中
        b = sum(a[0:])  #建立变量b,使用sum()函数计算列表a中从0开始到结尾（包含结尾最后一个值）的总和
        task1_score = b
  Routine judge_task2
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    CodeComponent code_judge_task2
      Code Type = Auto->JS
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      Begin Experiment:
        feedback = "" #建立名为feedback的变量，等号的左右两边均有空格(接下)
                      #（接上）等号右边为英文引号(内无空格)，会有文字赋值到该变量
        a2 = []  #建立名为a的变量，变量类型为列表，等号右边为中括号（内无空格）
      Begin Routine:
        a2.append(key_resp_task2.corr)     #变量a是个列表，.append()函数把括号内key_resp.corr的值添加到a中
        b = sum(a2[0:])  #建立变量b,使用sum()函数计算列表a中从0开始到结尾（包含结尾最后一个值）的总和
        task2_score = b
  Routine practice2task1
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        练习结束了，接下来是正式实验
        请在保证正确率的前提下尽快反应。
        S键表示左边红点分布更多，K键表示右边更多。
        每对1题，你将获得0.2元报酬，共计60题
        如果你已经准备好，按空格键开始测试1。
    KeyboardComponent space_next_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine thanks_gen
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    CodeComponent code_thanks
      Code Type = Auto->JS
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      Begin Routine:
        txt_thanks = "恭喜你完成了本次实验所有任务！\n 感谢你的参与！\n 在测试1中，您答对了: " + str(task1_score) + "\n在测试2中，您答对了："+str(task2_score)
Flow
  Routine blank_for_code
  Routine instr1
  LoopInitiator trials_practive loopType="TrialHandler"
    conditionsFile = practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Pic0': 'withoutP40/No_prompt_40_left_2.png', 'correct_key0': 's'},
      {'Pic0': 'withoutP40/No_prompt_40_left_111.png', 'correct_key0': 's'},
      {'Pic0': 'withoutP40/No_prompt_40_left_84.png', 'correct_key0': 's'},
      {'Pic0': 'withoutP40/No_prompt_40_right_129.png', 'correct_key0': 'k'},
      {'Pic0': 'withoutP40/No_prompt_40_right_25.png', 'correct_key0': 'k'},
      {'Pic0': 'withoutP40/No_prompt_40_right_110.png', 'correct_key0': 'k'}]
    Routine practice_pic
  LoopTerminator trials_practive
  Routine practice2task1
  LoopInitiator trials1 loopType="TrialHandler"
    conditionsFile = $loop1_filename
    loopType = random
    nReps = 1
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    conditions:
      [{'withoutP1': 'withP/No_prompt_left_78.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_94.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_98.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_50.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_52.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_137.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_127.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_49.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_118.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_123.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_88.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_122.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_9.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_121.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_23.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_96.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_69.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_38.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_107.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_15.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_12.png', 'correct_key1': 's'},
      {'withoutP1': 'withP/No_prompt_left_111.png', 'correct_key1': 's'}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
    Routine task1_with_P
    Routine judge_task1
  LoopTerminator trials1
  Routine task1_to_2
  LoopInitiator trials2 loopType="TrialHandler"
    conditionsFile = $loop2_filename
    loopType = random
    nReps = 1
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    conditions:
      [{'withP2': 'withoutP/No_prompt_left_137.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_12.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_61.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_33.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_149.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_25.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_118.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_142.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_34.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_27.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_122.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_32.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_54.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_52.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_136.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_26.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_95.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_96.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_39.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_48.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_45.png', 'correct_key2': 's'},
      {'withP2': 'withoutP/No_prompt_left_126.png', 'correct_key2': 's'}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
    Routine task2_without_P
    Routine judge_task2
  LoopTerminator trials2
  Routine thanks_gen
  Routine Thanks
